CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "red")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Orange")
    Name to assign these images:green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "green")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "blue")
    Name to assign these images:FarRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:FarRed
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):60,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Blue
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:green
    Name the primary objects to be identified:HIV
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Red
    Name the primary objects to be identified:Tpr
    Typical diameter of objects, in pixel units (Min,Max):1,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.002,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:9|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
    Select images to measure:Red, green
    Select objects to measure:HIV, Nuclei, Tpr

RelateObjects:[module_num:10|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
    Parent objects:Nuclei
    Child objects:Tpr
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:NuclearTpr
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
RelateObjects:[module_num:11|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
    Parent objects:Nuclei
    Child objects:HIV
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:NuclearHIV
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:Red, green
    Select objects to measure:NuclearHIV, NuclearTpr, Nuclei, Tpr

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:NuclearTpr
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_NuclearTpr,Image|Count_NuclearHIV,Image|Count_HIV,Nuclei|Mean_Tpr_Intensity_MaxIntensity_Red,Nuclei|Mean_Tpr_Intensity_MaxIntensity_green,Nuclei|Mean_Tpr_Intensity_IntegratedIntensity_Red,Nuclei|Mean_Tpr_Intensity_IntegratedIntensity_green,Nuclei|Mean_Tpr_Intensity_MeanIntensity_green,Nuclei|Mean_Tpr_Intensity_MeanIntensity_Red,Nuclei|Mean_Tpr_Intensity_MedianIntensity_Red,Nuclei|Mean_Tpr_Number_Object_Number,Nuclei|Mean_HIV_Intensity_MeanIntensity_green,Nuclei|Mean_HIV_Intensity_MeanIntensity_Red,Nuclei|Mean_HIV_Intensity_MaxIntensity_Red,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Nup50__6h
    Overwrite existing files without warning?:No
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